OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Settings
  Participant = 0
  Block = 1

Lua Stimulator => #0
  Lua Script = ${Player_ScenarioDirectory}/scripts/stroop_timing.lua
  Target display (sec) = 2
  Target nbr = 1
  Warning = false
  Target_Stimulation = OVTK_StimulationId_Number_00
  Baseline duration (sec) = 1
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/02.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/03.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/04.png
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/05.png
  Stimulation 5 = OVTK_StimulationId_Label_05
  Cue Image 6 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/06.png
  Stimulation 6 = OVTK_StimulationId_Label_06
  Cue Image 7 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/07.png
  Stimulation 7 = OVTK_StimulationId_Label_09
  Cue Image 8 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/08.png
  Stimulation 8 = OVTK_StimulationId_Label_08
  Cue Image 9 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/09.png
  Stimulation 9 = OVTK_StimulationId_Label_09
  Cue Image 10 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/10.png
  Stimulation 10 = OVTK_StimulationId_Label_11
  Cue Image 11 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/11.png
  Stimulation 11 = OVTK_StimulationId_Label_11
  Cue Image 12 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/12.png
  Stimulation 12 = OVTK_StimulationId_Label_12
  Cue Image 13 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/13.png
  Stimulation 13 = OVTK_StimulationId_Label_13
  Cue Image 14 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/14.png
  Stimulation 14 = OVTK_StimulationId_Label_14
  Cue Image 15 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/15.png
  Stimulation 15 = OVTK_StimulationId_Label_15
  Cue Image 16 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/16.png
  Stimulation 16 = OVTK_StimulationId_Label_16
  Cue Image 17 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/17.png
  Stimulation 17 = OVTK_GDF_Cross_On_Screen
  Cue Image 18 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/18.png
  Stimulation 18 = OVTK_StimulationId_Label_18
  Cue Image 19 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/19.png
  Stimulation 19 = OVTK_StimulationId_Label_19
  Cue Image 20 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/20.png
  Stimulation 20 = OVTK_StimulationId_Label_20
  Cue Image 21 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/21.png
  Stimulation 21 = OVTK_StimulationId_Label_21
  Cue Image 22 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/22.png
  Stimulation 22 = OVTK_StimulationId_Label_22
  Cue Image 23 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/23.png
  Stimulation 23 = OVTK_StimulationId_Label_23
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/image_display_config.xml
#0 -> Sound Player 1
  PLAY trigger = OVTK_StimulationId_Label_D1
  STOP trigger = OVTK_StimulationId_Label_D0
  File to play = ${Player_ScenarioDirectory}/assets/1.wav
  Loop = false
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/sound_player_1_config.xml
#0 -> Sound Player 2
  PLAY trigger = OVTK_StimulationId_Label_D2
  STOP trigger = OVTK_StimulationId_Label_D0
  File to play = ${Player_ScenarioDirectory}/assets/2.wav
  Loop = false
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/sound_player_2_config.xml
#0 -> Sound Player 3
  PLAY trigger = OVTK_StimulationId_Label_D3
  STOP trigger = OVTK_StimulationId_Label_D0
  File to play = ${Player_ScenarioDirectory}/assets/3.wav
  Loop = false
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/sound_player_3_config.xml
#0 -> Sound Player 4
  PLAY trigger = OVTK_StimulationId_Label_D4
  STOP trigger = OVTK_StimulationId_Label_D0
  File to play = ${Player_ScenarioDirectory}/assets/4.wav
  Loop = false
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/sound_player_4_config.xml

Keyboard stimulator
  Filename = ${Player_ScenarioDirectory}/config/stroop_buttons.txt

Acquisition client => #7
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Triggers=#7.Stimulations, Input=#7.Signal stream -> Input Stream Switch => #8
  Default to Input 1 = true
  Switch stim for input 1 = OVTK_StimulationId_ExperimentStart
  Switch stim for input 2 = OVTK_StimulationId_ExperimentStop
-> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller "Stop Experiment"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Triggers=#7.Stimulations, Input=#7.Stimulations -> Input Stream Switch => #11
  Default to Input 1 = true
  Switch stim for input 1 = OVTK_StimulationId_ExperimentStart
  Switch stim for input 2 = OVTK_StimulationId_ExperimentStop
Input stream 1=#8, Input stream 2=#11 -> Identity => #12
Input Signal=#12.Output stream 1, Input Stimulations=#12.Output stream 2 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/data/record_p-$var{Participant}_b-$var{Block}_$core{date}-$core{time}.ov
  Use compression = false
Signal=#12.Output stream 1, Stimulations=#12.Output stream 2 -> EDF File Writer
  Filename = ${Player_ScenarioDirectory}/data/record_p-$var{Participant}_b-$var{Block}_$core{date}-$core{time}.edf
